(AutomaticParameterEstimation "true")
(CheckNumberOfSamples "true")
(DefaultPixelValue 0)
(FinalBSplineInterpolationOrder 3)
(FinalGridSpacingInVoxels  16)
(FixedImagePyramid "FixedSmoothingImagePyramid")
(GridSpacingSchedule 2.803221 1.988100 1.410000 1.000000)
(ImageSampler "RandomCoordinate")
(Interpolator "ReducedDimensionBSplineInterpolator")
(MaximumNumberOfIterations 256)
(MaximumNumberOfSamplingAttempts 8)
(MovingImagePyramid "MovingSmoothingImagePyramid")
(NewSamplesEveryIteration "true")
(NumberOfResolutions 4)
(NumberOfSamplesForExactGradient 4096)
(NumberOfSpatialSamples 2048)
(Optimizer "AdaptiveStochasticGradientDescent")
(Registration "MultiResolutionRegistration")
(ResampleInterpolator "FinalReducedDimensionBSplineInterpolator")
(Resampler "DefaultResampler")
(ResultImageFormat "nii")
(Transform "BSplineStackTransform")
(WriteIterationInfo "false")
(WriteResultImage "true")

//Choose one of the following groupwise metrics:
//(Metric "PCAMetric2")
//(Metric "PCAMetric")
//(Metric "LinearGroupwiseMI")
//(Metric "SumOfPairwiseCorrelationCoefficientsMetric")
(Metric "VarianceOverLastDimensionMetric")

////Specific for the LinearGroupwiseMI metric
//(TemplateImage "ArithmeticAverage" "ArithmeticAverage")
//(Combination "Sum" "Sum")
//(UseFastAndLowMemoryVersion "true")
//(NumberOfFixedHistogramBins 32)
//(NumberOfMovingHistogramBins 32)

////Specific for the PCAMetric
//(NumEigenValues 7)
